PsychoPy2experiment version="2022.1.4"
Settings
  Audio lib = ptb
  Data filename = u'data/%s_%s_%s' % (expInfo['Participant_ID'], expName, expInfo['Date'])
  Experiment info = {'Participant_ID': '', 'Age group (A / S)': '', 'Gender (F / M)': '', 'Date': ''}
  Full-screen window = True
  Monitor = testMonitor
  Save csv file = True
  Save excel file = True
  Save hdf5 file = True
  Screen = 1
  Units = height
  Window size (pixels) = [1920, 1080]
  color = 0.0000, 0.0000, 0.0000
  expName = Modified_Sternberg_Task_SWM_latest_2_working
  keyboardBackend = ioHub
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Routines
  Routine Instruction
    CodeComponent Input_code
      Code Type = Auto->JS
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      Before Experiment:
        ### RESOLUTION OF THE SCREEN - control the pic size
        h           = 0.75 #(horizontal strach)
        w           = 0.75 #(vertical strach)
        h_c         = 0.35    #the same for pictogram
        w_c         = 0.8    #the same for pictogram

        ### Fixation cross size
        w_cr        = 0.05
        h_cr        = w_cr

        ### Letter height
        l_height    = 0.04

        ### VERBAL PROBE height
        stim_height = 0.2 #0.4 is to big

        ### Experiment colors
        let_color   = 'white'
        back_color  = 'gray'

        ### PAUSE PLACER
        trials_after_which_to_pause = 60
        numb_pause                  = 4

        ###### TRIGERS !!!for each condition
        ### GENERAL
        Practice    = 10
        Fixation    = 11
        Instruction = 20
        Exp_start   = 30
        Pause       = 40
        Finish      = 50

        ### EXPERIMENT RELATED
        # 0 - perceive; 1 - spatial; 2 - verbal;
        # 3 - rotate;   4 - verbal
        Trial_type  = 2 #or here: we need to differentiate the trial type
        Encoding    = 3
        Storage_1   = 4 #make for every type
        CE_type     = 5
        Storage_2   = 6 #make for every condition
        Probe       = 7
        Ans_correct = 8
        Ans_incor   = 9


        ### PHOTO TRIGGER
        w_photo     = 0.1
        x_photo     = -0.58
        y_photo     = -0.45
        color_photo = 'grey'

        ### ANSWER INVERSION
        ans    = 'p'
        re_ans = 'q'
      Begin Experiment:
        trial       = 1
    KeyboardComponent key_resp
      allowedKeys = 'space', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0
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    ImageComponent image
      image = Inst/Instructions.jpg
      size = (1.3, 0.8)
      startVal [time (s)] = 0
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    PolygonComponent photo_trigger_1
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
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    MouseComponent mouse_2
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0
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  Routine Fixation
    CodeComponent code_5
      Code Type = Auto->JS
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      End Routine:
        print('Trial_number_{}'.format(trial))
    PolygonComponent Fixation_cross
      fillColor = $let_color
      lineColor = $let_color
      shape = cross
      size = (w_cr, h_cr)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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    KeyboardComponent Skipper_1
      allowedKeys = 'm', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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    ParallelOutComponent Fixation_port
      address = 0xE030
      register = EIO
      startData = Fixation
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_2
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_5
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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  Routine Encoding
    CodeComponent Perception_trial_rule
      Code Type = Auto->JS
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      Begin Routine:
        if task_ind == 0:
            print('perceive')
            memory = 0
            trial+=1
        else:
            print('memorize')
            memory = 1

        path = 'pics'
        file_to_show = '{}/{}'.format(path, encoding_stim)


        Encoding_2 = (task_ind*10)+Encoding
      End Routine:
        #Stimulus
    ImageComponent Stimulus
      image [set every repeat] = $file_to_show
      size = (h,w)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0+add_time
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    KeyboardComponent Skipper_3
      allowedKeys = 'm', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2+add_time
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    ParallelOutComponent Encoding_port
      address = 0xE030
      register = EIO
      startData = Encoding_2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_4
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_7
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 2.0+add_time
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  Routine Storage_1
    CodeComponent code_6
      Code Type = Auto->JS
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      Begin Routine:
        Storage_12 = (task_ind*10)+Storage_1
    KeyboardComponent Skipper_4
      allowedKeys = 'm', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3+add_time
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    ParallelOutComponent Storage_1_port
      address = 0xE030
      register = EIO
      startData = Storage_12
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_5
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_12
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3+add_time
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  Routine CE_manipilation
    CodeComponent code_2
      Code Type = Auto->JS
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      Begin Routine:
        task_ind_cue = 'cues/{}.jpg'.format(task_ind)

        CE_type_2 = (task_ind*10)+CE_type
      End Routine:
        #Manipulation_cue
    ImageComponent Manipulation_cue
      image [set every repeat] = $task_ind_cue
      interpolate = nearest
      size = (w_c, h_c)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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    KeyboardComponent Skipper_5
      allowedKeys = 'm', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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    ParallelOutComponent CE_cue_port
      address = 0xE030
      register = EIO
      startData = 5
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_6
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_8
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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  Routine Storage_2
    CodeComponent code_7
      Code Type = Auto->JS
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      Begin Routine:
        Storage_22 = (task_ind*10)+Storage_2
      End Routine:
        if task_ind == 1:  #location
            visual = 1
            verbal = 0
        if task_ind == 2:  #verbal
            visual = 0
            verbal = 1
        if task_ind == 3:  #rotate
            visual = 1
            verbal = 0
        if task_ind == 4:  #reorder
            visual = 0
            verbal = 1
    KeyboardComponent Skipper_6
      allowedKeys = 'm', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3+add_time
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    ParallelOutComponent Storage_2_port
      address = 0xE030
      register = EIO
      startData = Storage_22
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_7
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_9
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 3+add_time
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  Routine Instuction
    CodeComponent Trial_counter_zeroing
      Code Type = Auto->JS
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      End Routine:
        trial = 0
    TextComponent Warning_of_Experiment
      color = $let_color
      letterHeight = l_height
      startVal [time (s)] = 0.0
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      text:
        Вы прошли тренировку и готовы приступить к эксперименту. Скажите экспериментатору, насколько хорошо Вы поняли инструкцию?
        Очень важно во время эксперимента не повторять / произносить буквы.

        В ходе эксперимента будет 3 перерыва по 2 минуты. Вы сами решаете, нужно ли Вам использовать весь перерыв, или Вы готовы продолжить эксперимент раньше. Если Вы готовы продолжить эксперимент - скажите экспериментатору. Перед началом нового блока эксперимента вы увидите соответствующее предупреждение.

        Если у Вас остались вопросы, обратитесь к экспериментатору.
        Нажмите пробел, чтобы продолжить.
    KeyboardComponent Readiness_key
      allowedKeys = 'space', 'ь', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent p_port
      address = 0xE030
      register = EIO
      startData = Instruction
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_9
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Thank_you_slide
    TextComponent Thank_you_text
      color = $let_color
      letterHeight = l_height
      startVal [time (s)] = 0.0
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      text:
        Эксперимент завершен. Спасибо Вам за участие!
    KeyboardComponent Exiter
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    ParallelOutComponent Finish_port
      address = 0xE030
      register = EIO
      startData = Finish
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Trial_type_cue_presentation
    CodeComponent code
      Code Type = Auto->JS
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      Begin Routine:
        if task_ind == 0:
            trial_type = 'cues/0.jpg'
        else:
            trial_type = 'cues/rem.jpg' #.format(path)

        Trial_type_2 = (task_ind*10)+Trial_type
      End Routine:
        #Trial_cue_option_2
    ImageComponent Trial_cue_option_2
      image [set every repeat] = $trial_type
      interpolate = nearest
      size = (w_c, h_c)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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    KeyboardComponent Skipper_2
      allowedKeys = 'm', 'ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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    ParallelOutComponent Type_cue_port
      address = 0xE030
      register = EIO
      startData = Trial_type_2
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_3
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_6
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.5+add_time
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  Routine Trial_counter
    CodeComponent Trial_count
      Code Type = Auto->JS
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      Before Experiment:
        pause_commander = 0
      End Routine:
        for i in range(numb_pause):
            if trial == (trials_after_which_to_pause*(i+1))-1:
                pause_commander = 1

        if trial == (trials_after_which_to_pause*(numb_pause+1))-1:
            pause_commander = 0

        print(trial)
  Routine Pause_2
    CodeComponent code_4
      Code Type = Auto->JS
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      End Routine:
        pause_commander = 0
        print("BREAK")
    TextComponent text
      color = $let_color
      letterHeight = l_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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      text:
        Сейчас вы можете отдохнуть. Перерыв длится 2 минуты.
        Вы можете завершить его в любое время, нажав ПРОБЕЛ. Перед тем, как эксперимент продолжится, вы увидите предупреждение об этом.
    KeyboardComponent Break_finisher
      allowedKeys = 'space', 'ь', 'm'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 120
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    ParallelOutComponent Break_port
      address = 0xE030
      register = EIO
      startData = Pause
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_10
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Practice_print
    CodeComponent Printer_P
      Code Type = Auto->JS
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      End Routine:
        print("PRACTICE")
    ParallelOutComponent Experiment_start_port
      address = 0xE030
      register = EIO
      startData = Practice
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_3
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Если Вы готовы начать эксперимент, скажите экспериментатору
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    KeyboardComponent key_resp_3
      allowedKeys = '1','4'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    PolygonComponent photo_trigger_1_v
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    MouseComponent mouse_3
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine Exp_print
    CodeComponent print_E
      Code Type = Auto->JS
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      Begin Experiment:
        trial = 1
      End Routine:
        print("EXPERIMENT")
        add_time = 0
    ParallelOutComponent Exp_start_port
      address = 0xE030
      register = EIO
      startData = Exp_start
      startVal [time (s)] = 0.0
      stopData = 0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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  Routine Warning_exp_start
    TextComponent text_2
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
      text = Приготовьтесь, эксперимент возобновляется
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    KeyboardComponent key_resp_2
      allowedKeys = '1','4','space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5
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    PolygonComponent photo_trigger_11
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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  Routine Instruction_type
    CodeComponent code_8
      Code Type = Auto->JS
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      Begin Routine:
        if trial < 6:
            add_time = 10
            text_to_warn = 'Практика вместе с экспериментатором'
            time_to_warn = 4

        if (trial < 11 and trial > 5):
            add_time = 3
            text_to_warn = 'Самостоятельная практика'
            time_to_warn = 4

        if trial > 10:
            add_time = 0
            text_to_warn = 'Практика в реальных условиях'
            time_to_warn = 4

        if trial > 11:
            add_time = 0
            text_to_warn = ''
            time_to_warn = 0
    TextComponent text_4
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_warn
      text [set every repeat] = $text_to_warn
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    KeyboardComponent Skipper_
      allowedKeys = 'm','ь'
      disabled = True
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_warn
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    MouseComponent mouse_4
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_warn
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  Routine Probe_verb
    CodeComponent Copy_3_3_v
      Code Type = Py
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      Begin Routine:
        path = 'probes'

        if task_ind == 2:  #verbal
            what_to_show = probe_stim
            time_to_show = 2
        if task_ind == 4:  #reorder
            what_to_show = probe_stim
            time_to_show = 3

        Probe_2 = (task_ind*10)+Probe
        Probe_3.setData(Probe_2)
      End Routine:
        answer = key_resp_4.keys
        rt = key_resp_4.rt
        print('Answer_is_{}'.format(answer))

        ##### Y/N TRANSLATION TO DIGITS
        if   answer == ans:
            answer_2 = '1.0'
        elif answer == re_ans:
            answer_2 = '0.0'
        else:
            answer_2 = '2.0'

        ### CALCULATION BLOCK
        if str(answer_2) == str(answer_type):
            print('{}.Correct'.format(trial))
            trial+=1
            To_trigger = (task_ind*10)+Ans_incor
            print('Trigger_{}'.format(To_trigger))
            Answer_v.setData(To_trigger)  #Seting a particular triger
        else:
            print('{}.Incorrect'.format(trial))
            trial+=1
            To_trigger = (task_ind*10)+Ans_correct
            print('Trigger_{}'.format(To_trigger))
            Answer_v.setData(To_trigger)  #Seting a particular triger

        """
        Important - breaks are always INCORRECT, as they (2.0) will
        never equal answer_type (1.0 or 0.0). So, you can subtract from INCORRECT
        """

        #Sending a signal to recording computer
        signal_sent = True
    ParallelOutComponent Probe_3_v
      address = 0xE030
      register = EIO
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    TextComponent text_5
      color = $let_color
      font = Century gothic
      letterHeight = stim_height
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_show+add_time
      text [set every repeat] = $what_to_show
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    ParallelOutComponent Answer_v
      address = 0xE030
      register = EIO
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_8_v
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp_4
      allowedKeys = 'p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_show+add_time
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  Routine Probe_vis
    CodeComponent Copy_3_3
      Code Type = Py
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      Begin Routine:
        path = 'probes'

        if task_ind == 1:  #location
            pic_probe = '{}/figure_{}.png'.format(path, probe_stim)
            time_to_show = 2
        if task_ind == 3:  #rotation
            pic_probe = '{}/figure_{}.png'.format(path, probe_stim)
            time_to_show = 3

        Probe_2 = (task_ind*10)+Probe
        Probe_3.setData(Probe_2)
      End Routine:
        answer = key_resp_5.keys
        rt = key_resp_5.rt
        print('Answer_is_{}'.format(answer))

        ##### Y/N TRANSLATION TO DIGITS
        if   answer == ans:
            answer_2 = '1.0'
        elif answer == re_ans:
            answer_2 = '0.0'
        else:
            answer_2 = '2.0'


        #### CALCULATION BLOCK
        if str(answer_2) == str(answer_type):
            print('{}.Correct'.format(trial))
            trial+=1
            To_trigger = (task_ind*10)+Ans_incor
            print('Trigger_{}'.format(To_trigger))
            Answer.setData(To_trigger)  #Seting a particular triger
        else:
            cor = 0
            print('{}.Incorrect'.format(trial))
            trial+=1
            To_trigger = (task_ind*10)+Ans_correct
            print('Trigger_{}'.format(To_trigger))
            Answer.setData(To_trigger)  #Seting a particular triger

        """
        Important - breaks are always INCORRECT, as they (2.0) will
        never equal answer_type (1.0 or 0.0). So, you can subtract from INCORRECT
        """

        #Sending a signal to recording computer
        signal_sent = True
    ParallelOutComponent Probe_3
      address = 0xE030
      register = EIO
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    ImageComponent Spatial_probe
      image [set every repeat] = $pic_probe
      size = (w, h)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_show+add_time
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    ParallelOutComponent Answer
      address = 0xE030
      register = EIO
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
      syncScreen = True
      syncScreenRefresh = False
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    PolygonComponent photo_trigger_8
      fillColor = $color_photo
      lineColor = $color_photo
      pos = (x_photo, y_photo)
      shape = rectangle
      size = (w_photo, w_photo)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.1
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    KeyboardComponent key_resp_5
      allowedKeys = 'p','q'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = time_to_show+add_time
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  Routine Keys
    TextComponent text_6
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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      text:
        Для того, чтобы дать ответ, нажмите:
        красную клавишу - "правильно"
        синюю клавишу    -   "неправильно"
    MouseComponent mouse
      forceEndRoutineOnPress = any click
      newClicksOnly = False
      saveMouseState = on click
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 5.0
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  Routine Hello_slide
    TextComponent text_7
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      text = Добро пожаловать на экспериментальное исследование рабочей памяти
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    MouseComponent mouse_10
      forceEndRoutineOnPress = any click
      saveMouseState = on click
      startVal [time (s)] = 0.0
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  Routine What_key_to_press
    TextComponent text_8
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Синяя клавиша - "неправильно"

        Красная клавиша - "правильно"
    MouseComponent mouse_11
      forceEndRoutineOnPress = any click
      saveMouseState = final
      startVal [time (s)] = 0.0
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Flow
  Routine Hello_slide
  Routine Instruction
  Routine What_key_to_press
  Routine Practice_print
  LoopInitiator Practice_trial loopType="TrialHandler"
    Selected rows = 0:30
    conditionsFile = practise.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'letters': ['Ж', 'М', 'К', 'Д'], 'locs': [3, 5, 6, 8], 'encoding_stim': 'grid_10007.png', 'incorr_locs': [0, 1, 2, 7], 'corr_letters': "{'Ж': 0, 'М': 1, 'К': 2, 'Д': 3}", 'incorr_letters': "{'Ж': [1, 2, 3], 'М': [0, 2, 3], 'К': [0, 1, 3], 'Д': [0, 1, 2]}", 'rotated_inds': [1, 7, 0, 6], 'incorr_rot': [2, 3, 5, 8], 'abc_ordered': "{'Д': 0, 'Ж': 1, 'К': 2, 'М': 3}", 'incorr_abc': "{'Д': [1], 'Ж': [0, 2], 'К': [0, 1], 'М': [1, 2]}", 'task_ind': 1, 'answer_type': 0.0, 'probe_stim': 0},
      {'letters': ['Ш', 'Г', 'П', 'Л'], 'locs': [3, 5, 7, 8], 'encoding_stim': 'grid_9238.png', 'incorr_locs': [0, 1, 2, 6], 'corr_letters': "{'Ш': 0, 'Г': 1, 'П': 2, 'Л': 3}", 'incorr_letters': "{'Ш': [1, 2, 3], 'Г': [0, 2, 3], 'П': [0, 1, 3], 'Л': [0, 1, 2]}", 'rotated_inds': [1, 7, 3, 6], 'incorr_rot': [0, 2, 5, 8], 'abc_ordered': "{'Г': 0, 'Л': 1, 'П': 2, 'Ш': 3}", 'incorr_abc': "{'Г': [1], 'Л': [0, 2], 'П': [1, 3], 'Ш': [2]}", 'task_ind': 2, 'answer_type': 1.0, 'probe_stim': 'Ш - - -'},
      {'letters': ['Ф', 'П', 'Ш', 'Г'], 'locs': [0, 3, 7, 8], 'encoding_stim': 'grid_14521.png', 'incorr_locs': [1, 2, 5, 6], 'corr_letters': "{'Ф': 0, 'П': 1, 'Ш': 2, 'Г': 3}", 'incorr_letters': "{'Ф': [1, 2, 3], 'П': [0, 2, 3], 'Ш': [0, 1, 3], 'Г': [0, 1, 2]}", 'rotated_inds': [2, 1, 3, 6], 'incorr_rot': [0, 5, 7, 8], 'abc_ordered': "{'Г': 0, 'П': 1, 'Ф': 2, 'Ш': 3}", 'incorr_abc': "{'Г': [1], 'П': [2, 3], 'Ф': [3], 'Ш': [2]}", 'task_ind': 3, 'answer_type': 1.0, 'probe_stim': 6},
      {'letters': ['П', 'Г', 'Ш', 'Л'], 'locs': [0, 1, 6, 7], 'encoding_stim': 'grid_9183.png', 'incorr_locs': [2, 3, 5, 8], 'corr_letters': "{'П': 0, 'Г': 1, 'Ш': 2, 'Л': 3}", 'incorr_letters': "{'П': [1, 2, 3], 'Г': [0, 2, 3], 'Ш': [0, 1, 3], 'Л': [0, 1, 2]}", 'rotated_inds': [2, 5, 0, 3], 'incorr_rot': [1, 6, 7, 8], 'abc_ordered': "{'Г': 0, 'Л': 1, 'П': 2, 'Ш': 3}", 'incorr_abc': "{'Г': [1], 'Л': [0, 2], 'П': [1, 3], 'Ш': [2]}", 'task_ind': 4, 'answer_type': 0.0, 'probe_stim': '- - Л -'}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
    Routine Instruction_type
    Routine Fixation
    Routine Trial_type_cue_presentation
    Routine Encoding
    Routine Storage_1
    LoopInitiator Memory_path loopType="TrialHandler"
      isTrials = False
      loopType = sequential
      nReps = memory
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      Routine CE_manipilation
      Routine Storage_2
      LoopInitiator Visual loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = visual
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        Routine Probe_vis
      LoopTerminator Visual
      LoopInitiator Verbal loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = verbal
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        Routine Probe_verb
      LoopTerminator Verbal
    LoopTerminator Memory_path
  LoopTerminator Practice_trial
  Routine Instuction
  Routine Exp_print
  LoopInitiator Experimental_session loopType="TrialHandler"
    Selected rows = 0:300
    conditionsFile = 2_10.xlsx
    loopType = sequential
    nReps = 1
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    conditions:
      [{'letters': ['Г', 'М', 'Ш', 'Д'], 'locs': [1, 2, 5, 6], 'encoding_stim': 'grid_12640.png', 'incorr_locs': [0, 3, 7, 8], 'corr_letters': "{'Г': 0, 'М': 1, 'Ш': 2, 'Д': 3}", 'incorr_letters': "{'Г': [1, 2, 3], 'М': [0, 2, 3], 'Ш': [0, 1, 3], 'Д': [0, 1, 2]}", 'rotated_inds': [5, 8, 7, 0], 'incorr_rot': [1, 2, 3, 6], 'abc_ordered': "{'Г': 0, 'Д': 1, 'М': 2, 'Ш': 3}", 'incorr_abc': "{'Г': [1], 'Д': [0], 'М': [1, 3], 'Ш': [2]}", 'task_ind': 2, 'answer_type': 0.0, 'probe_stim': '- - Д -'},
      {'letters': ['К', 'Т', 'Ф', 'П'], 'locs': [1, 2, 3, 8], 'encoding_stim': 'grid_2979.png', 'incorr_locs': [0, 5, 6, 7], 'corr_letters': "{'К': 0, 'Т': 1, 'Ф': 2, 'П': 3}", 'incorr_letters': "{'К': [1, 2, 3], 'Т': [0, 2, 3], 'Ф': [0, 1, 3], 'П': [0, 1, 2]}", 'rotated_inds': [5, 8, 1, 6], 'incorr_rot': [0, 2, 3, 7], 'abc_ordered': "{'К': 0, 'П': 1, 'Т': 2, 'Ф': 3}", 'incorr_abc': "{'К': [1, 2], 'П': [2, 3], 'Т': [1, 3], 'Ф': [2]}", 'task_ind': 1, 'answer_type': 0.0, 'probe_stim': 6},
      {'letters': ['Г', 'Ж', 'Д', 'М'], 'locs': [2, 6, 7, 8], 'encoding_stim': 'grid_12595.png', 'incorr_locs': [0, 1, 3, 5], 'corr_letters': "{'Г': 0, 'Ж': 1, 'Д': 2, 'М': 3}", 'incorr_letters': "{'Г': [1, 2, 3], 'Ж': [0, 2, 3], 'Д': [0, 1, 3], 'М': [0, 1, 2]}", 'rotated_inds': [8, 0, 3, 6], 'incorr_rot': [1, 2, 5, 7], 'abc_ordered': "{'Г': 0, 'Д': 1, 'Ж': 2, 'М': 3}", 'incorr_abc': "{'Г': [1], 'Д': [0], 'Ж': [0, 1], 'М': [1, 2]}", 'task_ind': 4, 'answer_type': 0.0, 'probe_stim': '- Г - -'},
      {'letters': ['Т', 'П', 'Ш', 'Л'], 'locs': [1, 5, 7, 8], 'encoding_stim': 'grid_1454.png', 'incorr_locs': [0, 2, 3, 6], 'corr_letters': "{'Т': 0, 'П': 1, 'Ш': 2, 'Л': 3}", 'incorr_letters': "{'Т': [1, 2, 3], 'П': [0, 2, 3], 'Ш': [0, 1, 3], 'Л': [0, 1, 2]}", 'rotated_inds': [5, 7, 3, 6], 'incorr_rot': [0, 1, 2, 8], 'abc_ordered': "{'Л': 0, 'П': 1, 'Т': 2, 'Ш': 3}", 'incorr_abc': "{'Л': [1, 2], 'П': [2, 3], 'Т': [1, 3], 'Ш': [2]}", 'task_ind': 4, 'answer_type': 1.0, 'probe_stim': 'Л - - -'}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
    Routine Fixation
    Routine Trial_type_cue_presentation
    Routine Encoding
    Routine Storage_1
    LoopInitiator Memory_path_2 loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = memory
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      Routine CE_manipilation
      Routine Storage_2
      LoopInitiator visual_exp loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = visual
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        Routine Probe_vis
      LoopTerminator visual_exp
      LoopInitiator verbal_exp loopType="TrialHandler"
        isTrials = False
        loopType = random
        nReps = verbal
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        Routine Probe_verb
      LoopTerminator verbal_exp
    LoopTerminator Memory_path_2
    Routine Trial_counter
    LoopInitiator Pause_loop loopType="TrialHandler"
      isTrials = False
      loopType = random
      nReps = pause_commander
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      Routine Pause_2
      Routine Warning_exp_start
    LoopTerminator Pause_loop
  LoopTerminator Experimental_session
  Routine Thank_you_slide
